<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "2" num_pumps = "1">
  <valve_commands>
    <valve_cmd name = "Stop Valve">
       <valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Flow Hybridization">
      <valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Flow Wash">
      <valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Flow STORM Buffer">
      <valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 1">
      <valve_pos valve_ID = "2" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 2">
      <valve_pos valve_ID = "2" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 3">
      <valve_pos valve_ID = "2" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 4">
      <valve_pos valve_ID = "2" port_ID = "4"></valve_pos>
    </valve_cmd>
  </valve_commands>

  <pump_commands>
     <pump_cmd name = "Normal Flow">
       <pump_config speed = "10.0" direction = "Forward"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Stop Flow">
       <pump_config speed = "0.0"></pump_config>
     </pump_cmd>
  </pump_commands>

  <kilroy_protocols>
     <protocol name = "Extra Wash">
	<valve_command duration = "0">Flow Wash</valve_command>
        <pump_command duration = "200">Normal Flow</pump_command>
	<pump_command duration = "0">Stop Flow</pump_command>
     </protocol>
     <protocol name = "Hybridize 1">
        <pump_command duration = "0">Normal Flow</pump_command>
        <valve_command duration = "20">Set Hyb 1</valve_command>
	<valve_command duration = "10">Flow Hybridization</valve_command>
	<valve_command duration = "10">Flow Wash</valve_command>
	<valve_command duration = "10">Flow STORM Buffer</valve_command>
	<pump_command duration = "0">Stop Flow</pump_command>
     </protocol>
   </kilroy_protocols>
</kilroy_configuration>