<?xml version="1.0" encoding="ISO-8859-1"?>
<illumination_settings>

  <control_modules>
	
    <control_module>
      <name>cube405</name>
      <module_name>sc_hardware.coherent.hLaser</module_name>
      <class_name>CoherentCube</class_name>
      <parameters>
	<port>COM10</port>
      </parameters>
    </control_module>
    
    <control_module>
      <name>daq</name>
      <module_name>sc_hardware.nationalInstruments.hNicontrol</module_name>
      <class_name>Nidaq</class_name>
      <parameters>
	<counter_board>PCIe-6351</counter_board>
	<counter_id type="int">0</counter_id>
	<counter_trigger type="int">0</counter_trigger>
	<waveform_clock>PFI12</waveform_clock>
      </parameters>
    </control_module>
  </control_modules>

  <channels>

    <!-- 750 laser -->
    <channel>
      <description>754</description>
      <color type="rgb">200,0,0</color>
      
      <digital_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCIe-6351</board>
	  <channel type="int">0</channel>
	</parameters>
      </digital_modulation>
    </channel>
	  

    <!-- 656 laser -->
    <channel>
      <description>656</description>
      <color type="rgb">255,0,0</color>
     
      <digital_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCIe-6351</board>
	  <channel type="int">1</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <!-- 561 laser -->
    <channel>
      <description>561</description>
      <color type="rgb">255,255,0</color>
      <digital_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCIe-6351</board>
	  <channel type="int">2</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <!-- 488 laser -->
    <channel>
      <description>488</description>
      <color type="rgb">0,255,255</color>
      <digital_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCIe-6351</board>
	  <channel type="int">3</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <!-- 405 laser -->
    <channel>
		<description>405</description>
		<color type="rgb">255,0,255</color>
      
		<amplitude_modulation>
			<uses>cube405</uses>
			<display_normalized type="boolean">True</display_normalized>
			<parameters>
				<maximum type="int">5000</maximum>
			</parameters>
		</amplitude_modulation>
		<digital_modulation>
			<uses>daq</uses>
			<parameters>
				<board>PCIe-6351</board>
				<channel type="int">4</channel>
			</parameters>
		</digital_modulation>

	 <!-- Remove the analog modulation. It is not used, and this channel is needed for controlling the focus lock
      <analog_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCIe-6351</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">5.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </analog_modulation>
	--> 
	
    </channel>

  </channels>

</illumination_settings>
