<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <!-- stage settings -->
  <stage>
    <x_sign type="int">-1</x_sign>
    <y_sign type="int">-1</y_sign>
    <flip_axis type="boolean">False</flip_axis>
  </stage>
    
  <!-- steve settings -->
  <mosaic>
    <objective type="string" values="obj1,obj2,obj3">obj1</objective>
    <flip_horizontal type="boolean">False</flip_horizontal>
    <flip_vertical type="boolean">False</flip_vertical>
    <transpose type="boolean">False</transpose>
	<obj1 desc="60x oil objective" type="string">60xOil,0.1092,0.0,0.0</obj1>
    <obj2 desc="10x objective" type="string">10x,0.650,0.0,0.0</obj2>
    <obj3 desc="60x Si objective" type="string">60xSi,0.1092,0.0,0.0</obj3>

  </mosaic>

</settings>
