<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>

  <!--
      General parameters
  -->
  <!-- The name to use for this setup. -->
  <name type="string">none</name>

  <!-- The starting directory. -->
  <name type="directory">/home/hbabcock/Data/</name>

  <!-- The UI mode, this is either "single" (window) or "detached" -->
  <ui_mode type="string">single</ui_mode>
  <!-- <ui_mode type="string">detached</ui_mode> -->

  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	You want these in this order..
    -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">settings</module_name>
      <ui_parent type="string">containerWidget</ui_parent>
    </settings>

    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">film</module_name>
      <ui_parent type="string">containerWidget</ui_parent>
    </film>

    <camera_params>
      <class_name type="string">ParamsDisplay</class_name>
      <module_name type="string">display.paramsDisplay</module_name>
      <ui_parent type="string">containerWidget</ui_parent>
    </camera_params>


    <!--
	Camera display.
	
	You also want this, but it's location in this file is not important.
	
	This tells HAL which module to use for processing and displaying
	camera images.
    -->
    <display>
      <class_name type="string">CameraDisplay</class_name>
      <module_name type="string">display.cameraWidgets</module_name>
      <class_name type="string">PyCameraWidget</class_name>
    </display>

   
    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that cameras should have names like "camera1", "camera2", etc..
    -->
    <control>
      <module_name type="string">camera.noneCameraControl</module_name>
      <parameters>
	<name type="string">camera1</name>
	<roll type="float">0.5</roll>
      </parameters>
    </control>


    <!-- Bluetooth communication -->
    <!--
    <bluetooth>
      <class_name type="string">HalBluetooth</class_name>
      <module_name type="string">halBluetooth</module_name>
      <parameters>
	<send_pictures type="int">1</send_pictures>
      </parameters>
    </bluetooth>
    -->

    <!-- Feed viewers -->
    <feedviewers>
      <class_name type="string">FeedViewers</class_name>
      <menu_item type="string">New Viewer</menu_item>
      <module_name type="string">display.feedViewer</module_name>
    </feedviewers>
    
    <!-- The focus lock -->
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.noneFocusLockZ</module_name>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control -->
    <illumination>
      <class_name type="string">IlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.illuminationControl</module_name>
      <parameters>
        <settings_xml type="string">none_illumination_settings.xml</settings_xml>
      </parameters>
    </illumination>
    
    <!-- Automatic illumination power adjustment -->
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>
    
    <!-- The live STORM analysis and display -->
    <spotcounter>
      <class_name type="string">SingleSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>

    <!-- Motorized XY stage -->
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.noneStageControl</module_name>
    </stage>

    <!-- Remote control of HAL via TCP/IP -->
    <tcpip>
      <class_name type="string">HalTCPControl</class_name>
      <module_name type="string">halTcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
    </tcpip>

  </modules>
  
</hardware>
